WorkflowBuilder(Version=2.8.1)
Bonsai.Shaders.CreateWindow
  Width=512
  Height=474
  VSync=On
  SwapSync=false
  ClearColor=White
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location(X=0, Y=-1)
  WindowBorder=Hidden
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.ShaderResources(Shaders="")
-> Bonsai.Shaders.MeshResources(Meshes="")
-> Bonsai.Shaders.TextureResources(Textures="")
-> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame => #6
ExternalizedMapping(BehaviourFileName(DisplayName=TestBehaviour), EyeFileName, TrialParamsFileName, PDAsyncFileName) => #7
#6, #7 -> GroupWorkflow FrameEventLoggers => #8
    WorkflowInput Source1 => #0
    ExternalizedMapping(FileName(DisplayName=BehaviourFileName)) => #1
    #0, #1 -> Disable IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=tracking_events.csv) => #2
    ExternalizedMapping(FileName(DisplayName=EyeFileName)) => #3
    #2, #3 -> Disable IncludeWorkflow EyeEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=StaticTF_EyeLog.csv) => #4
    ExternalizedMapping(FileName(DisplayName=TrialParamsFileName)) => #5
    #4, #5 -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=trial_events.csv) => #6
    ExternalizedMapping(FileName(DisplayName=PDAsyncFileName)) => #7
    #6, #7 -> Disable IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=PD_events.csv)
    -> WorkflowOutput
SubscribeSubject Borders
-> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #10
#8, #10 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
-> PublishSubject DrawStimuli
-> GroupWorkflow LED_sphere_mapping
    WorkflowInput Source1
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=White, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil) => #1
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=12.5, Y=12.5, Z=0))
    -> GroupWorkflow "left Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=90.000002504478161, Z=0), Translation(X=-12.5, Y=12.5, Z=0))
    -> GroupWorkflow "right Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=12.5, Z=-12.5))
    -> GroupWorkflow "front Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=180.00000500895632, Z=0), Translation(X=0, Y=12.5, Z=12.5))
    -> GroupWorkflow "back Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=12.5, Y=12.5, Z=0))
    -> GroupWorkflow "left Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0.25, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=90.000002504478161, Z=0), Translation(X=-12.5, Y=12.5, Z=0))
    -> GroupWorkflow "right Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0.25, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=12.5, Z=-12.5))
    -> GroupWorkflow "front Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0.25, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=180.00000500895632, Z=0), Translation(X=0, Y=12.5, Z=12.5))
    -> GroupWorkflow "back Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0.25, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=12.5, Y=12.5, Z=0))
    -> GroupWorkflow "left Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0.5, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=90.000002504478161, Z=0), Translation(X=-12.5, Y=12.5, Z=0))
    -> GroupWorkflow "right Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0.5, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=12.5, Z=-12.5))
    -> GroupWorkflow "front Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0.5, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=180.00000500895632, Z=0), Translation(X=0, Y=12.5, Z=12.5))
    -> GroupWorkflow "back Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0.5, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=12.5, Y=12.5, Z=0))
    -> GroupWorkflow "left Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0.75, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=90.000002504478161, Z=0), Translation(X=-12.5, Y=12.5, Z=0))
    -> GroupWorkflow "right Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0.75, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=12.5, Z=-12.5))
    -> GroupWorkflow "front Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0.75, Width=0.25, Height=0.25)
        -> WorkflowOutput
    #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=25, Height=25, Rotation(X=0, Y=180.00000500895632, Z=0), Translation(X=0, Y=12.5, Z=12.5))
    -> GroupWorkflow "back Screen"
        WorkflowInput Source1
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0.75, Width=0.25, Height=0.25)
        -> WorkflowOutput

ExternalizedMapping(Count)
-> GroupWorkflow Textures2D => #15
    WorkflowInput Source1 => #0
    -> GroupWorkflow Interval_2length
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=10
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=0
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=0
              Coherence2=0
            MotionCoherenceParams
              Duration=15
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=0
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=0
              Coherence2=0
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=1)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Disable GroupWorkflow rdk_interval => #2
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=10
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=0
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=0
              Coherence2=0
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=1)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Random => #3
    #2, #3 -> Bonsai.Numerics.Permutation
    -> Take(Count=1) => #5
    #0 -> GroupWorkflow 3coherence_1level
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=25
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=25
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=66
              Coherence2=66
            MotionCoherenceParams
              Duration=25
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=33
              Coherence2=33
            MotionCoherenceParams
              Duration=25
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=0
              Coherence2=100
            MotionCoherenceParams
              Duration=25
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=33
              Coherence2=33
            MotionCoherenceParams
              Duration=25
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=66
              Coherence2=66
            MotionCoherenceParams
              Duration=25
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=1)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Disable GroupWorkflow 3coherence_2levels
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=66
              Coherence2=66
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=33
              Coherence2=33
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=0
              Coherence2=100
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=33
              Coherence2=33
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=66
              Coherence2=66
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=nil
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=nil
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=66
              Coherence2=66
            MotionCoherenceParams
              Duration=nil
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=33
              Coherence2=33
            MotionCoherenceParams
              Duration=nil
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=0
              Coherence2=100
            MotionCoherenceParams
              Duration=nil
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=33
              Coherence2=33
            MotionCoherenceParams
              Duration=nil
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=66
              Coherence2=66
            MotionCoherenceParams
              Duration=nil
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=1)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Disable GroupWorkflow 4coherence_1level => #8
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=75
              Coherence2=75
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=50
              Coherence2=50
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=25
              Coherence2=25
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=25
              Coherence2=25
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=50
              Coherence2=50
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=75
              Coherence2=75
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=20
              Size=2
              dotLifeBool=1
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=4608
              numDots2=0
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=0
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=1)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Random => #9
    #8, #9 -> Bonsai.Numerics.Permutation
    -> Take(Count=1) => #11
    Source1=#5, Source3=#11 -> Concat
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> SelectMany DrawStimulus
            SubscribeSubject Borders
            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> PropertyMapping(numDots) => #4
            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=10)
            -> Bonsai.Numerics.Distributions.Sample
            -> PropertyMapping(rndseed) => #7
            #1, #4, #7 -> GenerateDotField(numDots=4608, left=-180, right=180, top=90, bottom=-90, rndseed=9) => #8
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifetime) => #10
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #13
            #10, #13 -> Zip
            -> Divide
            -> PropertyMapping(dotLifetime) => #16
            #4, #16 -> GenerateDotLives(dotLifetime=30, numDots=4608) => #17
            #8, #17 -> Zip => #18
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Size)
            -> PropertyMapping(Diameter) => #21
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelX1) => #23
            #13, #23 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityX) => #26
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelY1) => #28
            #13, #28 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityY) => #31
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Coherence1)
            -> PropertyMapping(Coherence) => #34
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Contrast1)
            -> PropertyMapping(ColorA) => #37
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Colour1)
            -> PropertyMapping(ColorR, ColorG, ColorB) => #40
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifeBool)
            -> PropertyMapping(dotLifetimeBool) => #43
            #18, #21, #26, #31, #34, #37, #40, #43, #16 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #44
                ExternalizedMapping(VelocityX) => #0
                ExternalizedMapping(VelocityY) => #1
                ExternalizedMapping(Coherence) => #2
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #4
                ExternalizedMapping(dotLifetimeBool, dotLifetime) => #5
                WorkflowInput Source1 => #6
                -> MemberSelector(Selector=Item1) => #7
                SubscribeSubject DrawStimuli
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #9
                ExternalizedMapping(LocationX) => #10
                ExternalizedMapping(LocationY) => #11
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
                -> PropertyMapping(ExtentX, ExtentY) => #14
                #9, #10, #11, #14 -> GroupWorkflow Transform => #15
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(X(DisplayName=LocationX)) => #1
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                    #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0, Y=0, Z=0) => #3
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                    #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #6
                    ExternalizedMapping(Angle) => #7
                    #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=0)
                -> PropertyMapping(X) => #18
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Y) => #21
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Z) => #24
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=1)
                -> PropertyMapping(W) => #27
                #15, #18, #21, #24, #27 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #29
                #7, #29 -> CombineLatest => #30
                #30, #29 -> Sample
                -> MemberSelector(Selector=Item1) => #32
                #6 -> MemberSelector(Selector=Item2) => #33
                #32, #33 -> CombineLatest => #34
                #0, #1, #2, #4, #5, #34 -> moveDots_2dLife(VelocityX=1.06666672, VelocityY=0, Coherence=66, dotLifetimeBool=1, dotLifetime=60, left=-180, right=180, top=90, bottom=-90)
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots2)
            -> PropertyMapping(numDots) => #47
            IntProperty(Value=666)
            -> PropertyMapping(rndseed) => #49
            #1, #47, #49 -> GenerateDotField(numDots=0, left=-180, right=180, top=90, bottom=-90, rndseed=666) => #50
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifetime) => #52
            #52, #13 -> Zip
            -> Divide
            -> PropertyMapping(dotLifetime) => #55
            #47, #55 -> GenerateDotLives(dotLifetime=60, numDots=0) => #56
            #50, #56 -> Zip => #57
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelX2) => #59
            #13, #59 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityX) => #62
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelY2) => #64
            #13, #64 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityY) => #67
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Coherence2)
            -> PropertyMapping(Coherence) => #70
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Contrast2)
            -> PropertyMapping(ColorA) => #73
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Colour2)
            -> PropertyMapping(ColorR, ColorG, ColorB) => #76
            #57, #21, #62, #67, #70, #73, #76, #43, #55 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #77
                ExternalizedMapping(VelocityX) => #0
                ExternalizedMapping(VelocityY) => #1
                ExternalizedMapping(Coherence) => #2
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #4
                ExternalizedMapping(dotLifetimeBool, dotLifetime) => #5
                WorkflowInput Source1 => #6
                -> MemberSelector(Selector=Item1) => #7
                SubscribeSubject DrawStimuli
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #9
                ExternalizedMapping(LocationX) => #10
                ExternalizedMapping(LocationY) => #11
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
                -> PropertyMapping(ExtentX, ExtentY) => #14
                #9, #10, #11, #14 -> GroupWorkflow Transform => #15
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(X(DisplayName=LocationX)) => #1
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                    #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0, Y=0, Z=0) => #3
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                    #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #6
                    ExternalizedMapping(Angle) => #7
                    #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=1)
                -> PropertyMapping(X) => #18
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Y) => #21
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Z) => #24
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=1)
                -> PropertyMapping(W) => #27
                #15, #18, #21, #24, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #29
                #7, #29 -> CombineLatest => #30
                #30, #29 -> Sample
                -> MemberSelector(Selector=Item1) => #32
                #6 -> MemberSelector(Selector=Item2) => #33
                #32, #33 -> CombineLatest => #34
                #0, #1, #2, #4, #5, #34 -> moveDots_2dLife(VelocityX=1.06666672, VelocityY=0, Coherence=66, dotLifetimeBool=1, dotLifetime=60, left=-180, right=180, top=90, bottom=-90)
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #44, #77 -> Zip => #78
            Disable Timer(DueTime=PT0.05S, Period=PT0S) => #79
            #78, #79 -> Disable SubscribeWhen => #80
            WorkflowInput Source1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT25S) => #85
            #80, #85 -> TakeUntil
            -> Last => #87
            Disable ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
            -> Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=2)
            -> Disable Bonsai.Numerics.Distributions.Sample
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                it ==1 ? TimeSpan.FromSeconds(5) :
                TimeSpan.FromSeconds(25)
            -> Disable PropertyMapping(DueTime) => #92
            #87, #92 -> Disable Bonsai.Shaders.Delay(DueTime=PT5S)
            -> Unit
            -> WorkflowOutput
            #87 -> FloatProperty(Value=0) => #96
            SubscribeSubject DrawStimuli
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #99
            #96, #99 -> Merge
            -> MulticastSubject QuadState

            SubscribeSubject DrawStimuli => #102
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Coherence2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                it ==0 ? 1:
                0
            -> PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #106
            #102, #106 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=83
              ExtentY=18
              LocationX=-3
              LocationY=10
              Layer=1
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
        -> Unit
        -> WorkflowOutput
        #0 -> ReplaySubject Parameters(BufferSize=nil) => #4
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #6
        #4, #6 -> Zip
        -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> Concat => #14
    ExternalizedMapping(Count) => #15
    #14, #15 -> RepeatCount(Count=168) => #16
    ExternalizedMapping(DueTime(DisplayName=preStim_grey))
    -> Bonsai.Shaders.Timer(DueTime=PT5M) => #18
    #16, #18 -> SubscribeWhen
    -> WorkflowOutput
    SubscribeSubject DrawStimuli
    -> IncludeWorkflow => #22
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=83
      ExtentY=18
      LocationX=-3
      LocationY=10
      Layer=1
      Angle=0
      ColorR=0
      ColorG=0
      ColorB=0
      ColorA=1
    #22, #18 -> TakeUntil
Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=true) => #16
#15, #16 -> SubscribeWhen

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=43)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

GroupWorkflow Borders
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=90)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-90)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-180)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=180)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=true)
-> SelectMany
    SubscribeSubject video1 => #0
    ExternalizedMapping(FileName(DisplayName=Vid1Name)) => #1
    #0, #1 -> Bonsai.FFmpeg.VideoWriter(FileName=camera1_.mp4, Suffix=Timestamp, Overwrite=true, FrameRate=100, OutputArguments="-s 640x480 -r 100 -pix_fmt gray -c:v libx264")

    SubscribeSubject Lux1 => #3
    ExternalizedMapping(FileName(DisplayName=Rig1Name)) => #4
    #3, #4 -> Bonsai.IO.CsvWriter(FileName=lux1_.csv, Delimiter=",", Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject video2 => #6
    ExternalizedMapping(FileName(DisplayName=Vid2Name)) => #7
    #6, #7 -> Bonsai.FFmpeg.VideoWriter(FileName=camera2_.mp4, Suffix=Timestamp, Overwrite=true, FrameRate=100, OutputArguments="-s 640x480 -r 100 -pix_fmt gray -c:v libx264")

    SubscribeSubject Lux2 => #9
    ExternalizedMapping(FileName(DisplayName=Rig2Name)) => #10
    #9, #10 -> Bonsai.IO.CsvWriter(FileName=lux2_.csv, Delimiter=",", Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject video3 => #12
    ExternalizedMapping(FileName(DisplayName=Vid3Name)) => #13
    #12, #13 -> Bonsai.FFmpeg.VideoWriter(FileName=camera3_.mp4, Suffix=Timestamp, Overwrite=true, FrameRate=100, OutputArguments="-s 640x480 -r 100 -pix_fmt gray -c:v libx264")

    SubscribeSubject Lux3 => #15
    ExternalizedMapping(FileName(DisplayName=Rig3Name)) => #16
    #15, #16 -> Bonsai.IO.CsvWriter(FileName=lux3_.csv, Delimiter=",", Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true)

    SubscribeSubject video4 => #18
    ExternalizedMapping(FileName(DisplayName=Vid4Name)) => #19
    #18, #19 -> Bonsai.FFmpeg.VideoWriter(FileName=camera4_.mp4, Suffix=Timestamp, Overwrite=true, FrameRate=100, OutputArguments="-s 640x480 -r 100 -pix_fmt gray -c:v libx264")

    SubscribeSubject Lux4 => #21
    ExternalizedMapping(FileName(DisplayName=Rig4Name)) => #22
    #21, #22 -> Bonsai.IO.CsvWriter(FileName=lux4_.csv, Delimiter=",", Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true)

Bonsai.Vision.CameraCapture(Index=2, CaptureProperties="")
-> Timestamp => #23
-> MemberSelector(Selector=Value)
-> PublishSubject video3
-> Bonsai.Vision.Grayscale => #26
-> Bonsai.Vision.Crop(RegionOfInterest(X=409, Y=77, Width=132, Height=50))
-> Bonsai.Dsp.Sum
-> MemberSelector(Selector=Val0) => #29
#26 -> Bonsai.Vision.Crop(RegionOfInterest(X=137, Y=70, Width=132, Height=50))
-> Bonsai.Dsp.Sum
-> MemberSelector(Selector=Val0) => #32
#29, #32 -> Zip
-> Add => #34
#23 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #35
#34, #35 -> Zip
-> Format(Format="{0},{1}", Selector="Item1,Item2")
-> PublishSubject Lux3

Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
-> Timestamp => #40
-> MemberSelector(Selector=Value)
-> PublishSubject video4
-> Bonsai.Vision.Grayscale => #43
-> Bonsai.Vision.Crop(RegionOfInterest(X=382, Y=71, Width=132, Height=50))
-> Bonsai.Dsp.Sum
-> MemberSelector(Selector=Val0) => #46
#43 -> Bonsai.Vision.Crop(RegionOfInterest(X=108, Y=66, Width=132, Height=50))
-> Bonsai.Dsp.Sum
-> MemberSelector(Selector=Val0) => #49
#46, #49 -> Zip
-> Add => #51
#40 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #52
#51, #52 -> Zip
-> Format(Format="{0},{1}", Selector="Item1,Item2")
-> PublishSubject Lux4

Bonsai.Vision.CameraCapture(Index=1, CaptureProperties="")
-> Timestamp => #57
-> MemberSelector(Selector=Value)
-> PublishSubject video2
-> Bonsai.Vision.Grayscale => #60
-> Bonsai.Vision.Crop(RegionOfInterest(X=383, Y=62, Width=132, Height=50))
-> Bonsai.Dsp.Sum
-> MemberSelector(Selector=Val0) => #63
#60 -> Bonsai.Vision.Crop(RegionOfInterest(X=111, Y=63, Width=132, Height=50))
-> Bonsai.Dsp.Sum
-> MemberSelector(Selector=Val0) => #66
#63, #66 -> Zip
-> Add => #68
#57 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #69
#68, #69 -> Zip
-> Format(Format="{0},{1}", Selector="Item1,Item2")
-> PublishSubject Lux2

Bonsai.Vision.CameraCapture(Index=3, CaptureProperties="")
-> Timestamp => #74
-> MemberSelector(Selector=Value)
-> PublishSubject video1
-> Bonsai.Vision.Grayscale => #77
-> Bonsai.Vision.Crop(RegionOfInterest(X=405, Y=83, Width=132, Height=50))
-> Bonsai.Dsp.Sum
-> MemberSelector(Selector=Val0) => #80
#77 -> Bonsai.Vision.Crop(RegionOfInterest(X=132, Y=78, Width=132, Height=50))
-> Bonsai.Dsp.Sum
-> MemberSelector(Selector=Val0) => #83
#80, #83 -> Zip
-> Add => #85
#74 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #86
#85, #86 -> Zip
-> Format(Format="{0},{1}", Selector="Item1,Item2")
-> PublishSubject Lux1
